CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:18
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:5
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "ch00")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch01")
    Name to assign these images:Biomarker_Mouse
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch02")
    Name to assign these images:Phalloidin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch03")
    Name to assign these images:Biomarker_Rabbit
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch04")
    Name to assign these images:Biomarker_Rabbit_2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):14,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.6
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.01,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:50
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    Thresholding method:Otsu

IdentifySecondaryObjects:[module_num:6|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enabled:False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
    Select the input objects:Nuclei
    Name the objects to be identified:Cytoplasm
    Select the method to identify the secondary objects:Propagation
    Select the input image:Phalloidin
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    Regularization factor:0.1
    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:FilteredNuclei
    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:2.5
    Threshold correction factor:3.5
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifySecondaryObjects:[module_num:7|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cytoplasm
    Select the method to identify the secondary objects:Propagation
    Select the input image:Phalloidin
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    Regularization factor:0.1
    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:FilteredNuclei
    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:2
    Threshold correction factor:1.45
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
OverlayOutlines:[module_num:8|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Phalloidin
    Name the output image:Cytoplasm_Overlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#1A0EF1
    Select objects to display:FilteredNuclei
    Select outline color:green
    Select objects to display:Cytoplasm

OverlayOutlines:[module_num:9|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DAPI
    Name the output image:Nuclei_Overlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#1A0EF1
    Select objects to display:FilteredNuclei
    Select outline color:green
    Select objects to display:Cytoplasm

MeasureObjectSizeShape:[module_num:10|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
    Select object sets to measure:Cytoplasm, FilteredNuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:Yes

MeasureObjectIntensity:[module_num:11|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
    Select images to measure:Biomarker_Mouse, Biomarker_Rabbit, Biomarker_Rabbit_2
    Select objects to measure:Cytoplasm, FilteredNuclei

ConvertObjectsToImage:[module_num:12|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
    Select the input objects:FilteredNuclei
    Name the output image:grey_nuclei
    Select the color format:uint16
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
ConvertObjectsToImage:[module_num:13|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
    Select the input objects:Cytoplasm
    Name the output image:Grey_cytoplasm
    Select the color format:uint16
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
SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:Cytoplasm_Overlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:Phalloidin
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Elsewhere...|Z:\\Pratik\\Functional subtypes senescence\\Susceptibility Aging\\12_12_23 Susceptibility Staining\\Cell Profiler\\REDONE\\Cell Outline
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:15|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
    Select the type of image to save:Image
    Select the image to save:Nuclei_Overlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:Phalloidin
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Elsewhere...|Z:\\Pratik\\Functional subtypes senescence\\Susceptibility Aging\\12_12_23 Susceptibility Staining\\Cell Profiler\\REDONE\\Nuclei Outline
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:16|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
    Select the type of image to save:Image
    Select the image to save:grey_nuclei
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Elsewhere...|Z:\\Pratik\\Functional subtypes senescence\\Susceptibility Aging\\12_12_23 Susceptibility Staining\\Cell Profiler\\REDONE\\Nuclei
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:17|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
    Select the type of image to save:Image
    Select the image to save:Grey_cytoplasm
    Select method for constructing file names:From image filename
    Select image name for file prefix:Phalloidin
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Elsewhere...|Z:\\Pratik\\Functional subtypes senescence\\Susceptibility Aging\\12_12_23 Susceptibility Staining\\Cell Profiler\\REDONE\\Cell
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ExportToSpreadsheet:[module_num:18|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|Z:\\Pratik\\Functional subtypes senescence\\Susceptibility Aging\\12_12_23 Susceptibility Staining\\Cell Profiler\\REDONE\\Excels
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:SUS2_REDONE_25_ctrl
    Overwrite existing files without warning?:Yes
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